OpenViBE-Scenario(FormatVersion=1, Creator=OpenVIBE, CreatorVersion=2.0.0)

GDF file reader => #0
  Filename =
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "AF3"
  Channel List = AF3
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #6
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "AF4"
  Channel List = AF4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #12
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #18
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #24
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "F7"
  Channel List = F7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #30
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "F8"
  Channel List = F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #36
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "FC5"
  Channel List = FC5
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #42
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "FC6"
  Channel List = FC6
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #48
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "T7"
  Channel List = T7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #54
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "T8"
  Channel List = T8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #60
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "P7"
  Channel List = P7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #66
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "P8"
  Channel List = P8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #72
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "O1"
  Channel List = O1
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #78
  Equation = log(1+x)
#0.EEG stream -> Channel Selector "O2"
  Channel List = O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "ALPHA"
  Filter Method = Butterworth
  Filter Type = High Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "x*x"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)" => #84
  Equation = log(1+x)
Input 1=#6, Input 2=#12, Input 3=#18, Input 4=#24, Input 5=#30, Input 6=#36, Input 7=#42, Input 8=#48, Input 9=#54, Input 10=#60, Input 11=#66, Input 12=#72, Input 13=#78, Input 14=#84 -> Signal Merger => #85
Experiment information=#0.Experiment information, Signal=#85 -> GDF file writer
  Filename =
#85 -> CSV File Writer (Deprecated)
  Filename =
  Column separator = ,
  Precision = 10
Data=#85 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 10.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 5.000000
  Bottom ruler = true
  Left ruler = false
  Multiview = false
